# Generated by Configurator on Thu Aug 26 17:20:20 CEST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,LaserDiodeDriver,LaserDiodeDriver,LaserDiodeDriver

# Pre-init settings for devices
Property,LaserDiodeDriver,Device Port,/dev/ttyACM0
Property,LaserDiodeDriver,Device Type,Arduino

Property,LaserDiodeDriver,Laser Label 1,405nm 150mW
Property,LaserDiodeDriver,Laser Label 2,
Property,LaserDiodeDriver,Laser Label 3,488nm 55mW
Property,LaserDiodeDriver,Laser Label 4,532nm 40mW
Property,LaserDiodeDriver,Laser Label 5,445nm 1600mW
Property,LaserDiodeDriver,Laser Label 6,638nm 1200mW
Property,LaserDiodeDriver,Laser Label 7,638nm 700mW
Property,LaserDiodeDriver,Laser Label 8,

Property,LaserDiodeDriver,Min. Laser Power 1 (%),39.5
Property,LaserDiodeDriver,Min. Laser Power 2 (%),0.0
Property,LaserDiodeDriver,Min. Laser Power 3 (%),51.6
Property,LaserDiodeDriver,Min. Laser Power 4 (%),82.7
Property,LaserDiodeDriver,Min. Laser Power 5 (%),52.2
Property,LaserDiodeDriver,Min. Laser Power 6 (%),54.9
Property,LaserDiodeDriver,Min. Laser Power 7 (%),0.0
Property,LaserDiodeDriver,Min. Laser Power 8 (%),0.0

Property,LaserDiodeDriver,Max. Laser Power 1 (%),60.4
Property,LaserDiodeDriver,Max. Laser Power 2 (%),100.0
Property,LaserDiodeDriver,Max. Laser Power 3 (%),63.7
Property,LaserDiodeDriver,Max. Laser Power 4 (%),91.9
Property,LaserDiodeDriver,Max. Laser Power 5 (%),80.5
Property,LaserDiodeDriver,Max. Laser Power 6 (%),82
Property,LaserDiodeDriver,Max. Laser Power 7 (%),1.0
Property,LaserDiodeDriver,Max. Laser Power 8 (%),1.0

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

